PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = emotion-regulation
  expVersion = 0.1
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent t_body
      letterHeight = 0.07
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Message
      units = height
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    TextComponent t_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to continue
      units = height
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $photo_filename
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $technique
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  Routine reset
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    CodeComponent code_slicer
      Code Type = Py
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      Before Experiment:
        import random
        import csv

        file_name = 'emotion_regulation_trials.csv'

        # Techniques and blocks
        techniques = ['view', 'suppression', 'reappraisal', 'suppression-reappraisal']
        block_ids = ['block1', 'block2', 'block3', 'block4']

        # Photo sets per block
        photo_sets = {
            'block1': list(range(1001, 1041)),
            'block2': list(range(2001, 2041)),
            'block3': list(range(3001, 3041)),
            'block4': list(range(4001, 4041)),
        }

        # Randomly assign techniques to blocks
        random.shuffle(techniques)
        block_to_technique = dict(zip(block_ids, techniques))

        # Randomize block order
        block_order = block_ids.copy()
        random.shuffle(block_order)

        # Build trial list
        trials = []
        trial_number = 1

        for block in block_order:
            technique = block_to_technique[block]
            photos = photo_sets[block].copy()
            random.shuffle(photos)

            for photo_id in photos:
                trials.append({
                    'trial_number': trial_number,
                    'block_id': block,
                    'technique': technique,
                    'photo_filename': f"{photo_id}.jpg"
                })
                trial_number += 1

        # Save to CSV
        with open(file_name, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=trials[0].keys())
            writer.writeheader()
            writer.writerows(trials)

        print(f"Saved randomized trial file: {file_name}")
      Begin Experiment:
        # Initialize slice indices
        start = 0
        end = 40

        # Store for logging
        thisExp.addData('block_order', block_order)
        thisExp.addData('block_to_technique', block_to_technique)
      Begin Routine:
        # Define slice for current block
        row_section = f"{start}:{end}"

        # Log which slice was used
        thisExp.addData('row_section', row_section)
      End Routine:
        # Advance slice for next block
        start += 40
        end += 40
  Routine stateMeasure
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    SliderComponent slider_generic
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      size [set every repeat] = (slider_gen_width, 0.1)
      startVal [condition] = $rating_type == 'Generic'
      stopVal [condition] = $rating_type != 'Generic'
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent slider_SAM
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 1, 2, 3, 4, 5, 6, 7, 8, 9
      letterHeight = 0.05
      pos [set every repeat] = (0, slider_y)
      size [set every repeat] = (slider_width, slider_height)
      startVal [condition] = $rating_type == 'SAM'
      stopVal [condition] = $rating_type != 'SAM'
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ImageComponent image_SAM
      image [set every repeat] = $picture_path
      pos [set every repeat] = (0, sam_y)
      size [set every repeat] = (sam_width, sam_height)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent t_sm_message
      letterHeight = 0.07
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_message
      wrapWidth = 1.5
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    TextComponent t_label_min
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[0], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_min_label
      wrapWidth = 0.25
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    TextComponent t_label_max
      letterHeight = 0.05
      pos [set every repeat] = (tick_positions[-1], label_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_max_label
      wrapWidth = 0.25
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    TextComponent t_continue_sm
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [condition] = $allowContinue == True
      text = Press the SPACEBAR to continue
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    CodeComponent code_sm_helper
      Code Type = Py
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      Begin Experiment:
        # Scale SAM properly
        # Window and coordinate setup
        screen_width, screen_height = win.size
        aspect = screen_width / screen_height  # width / height

        # In 'height' units:
        # - Full screen height = 1.0
        # - Full screen width  = aspect
        leftEdge = -aspect / 2
        rightEdge = aspect / 2
        topEdge = 0.5
        bottomEdge = -0.5


        # --- Generic Slider Scaling ---
        # Full-width slider across screen
        slider_gen_width = aspect * 0.6   # 60% of screen width

        # --- SAM image geometry (pixels) ---
        sam_px_width = 1168
        sam_px_height = 231
        sam_aspect = sam_px_width / sam_px_height  # ≈ 5.065

        # Pictogram/gap geometry (pixels)
        pictogram_px_width = 215
        gap_px_width = 23
        num_pictograms = 5
        num_gaps = num_pictograms - 1

        # Sanity check total width in px (info only)
        total_calc_px = num_pictograms * pictogram_px_width + num_gaps * gap_px_width
        # Note: total_calc_px ≈ 1175; close enough to 1170 given source image padding.

        # --- Layout decisions (height units) ---
        sam_height = 0.25                         # 25% of screen height
        sam_width  = sam_height * sam_aspect      # scaled width based on aspect
        sam_y      = 0.1                          # vertical position of the image

        # Slider layout (height units)
        slider_y      = -0.09                     # vertical position of the slider center
        slider_height = 0.06                      # slider thickness/height
        slider_px_width = sam_px_width - 215
        slider_width = sam_width * (slider_px_width / sam_px_width) # match slider width to image width

        # Label MinMax layout
        label_y = slider_y - 0.2 # slightly below the slider

        # Message Layout
        message_y = sam_y + 0.2

        # Scale factor: px -> 'height' units within the image width
        scale_factor = sam_width / sam_px_width

        pictogram_w = pictogram_px_width * scale_factor
        gap_w       = gap_px_width * scale_factor

        # --- Compute 9 tick x-positions aligned to pictograms (1,3,5,7,9) and gaps (2,4,6,8) ---
        tick_positions = []
        # Start at the center of the first pictogram: left edge + half pictogram width
        x = -sam_width / 2 + pictogram_w / 2

        for i in range(9):
            tick_positions.append(x)
            # Advance: pictogram -> gap -> pictogram -> gap ...
            if i % 2 == 0:  # 0,2,4,6,8 (odd-numbered ticks under pictograms)
                x += pictogram_w / 2 + gap_w / 2
            else:           # 1,3,5,7 (even-numbered ticks under gaps)
                x += gap_w / 2 + pictogram_w / 2

        # Helpful mapping: tick index (0..8) -> value (1..9)
        tick_values = list(range(1, 10))
      Begin Routine:
        allowContinue = False
      Each Frame:
        # Check if either slider has been rated
        rated = (slider_generic.getRating() is not None) or (slider_SAM.getRating() is not None)

        # If rated, allow spacebar to end the routine
        if rated:
            allowContinue = True
        else:
            allowContinue = False
    KeyboardComponent key_resp_sm
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [condition] = $allowContinue == True
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  Routine fixation
    RoutineSettingsComponent fixation
      stopVal [duration (s)] = 0.3
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    PolygonComponent cross_fixation
      fillColor = white
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = height
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  Routine instruction
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    TextComponent t_instruction
      letterHeight = 0.07
      pos = (0.0, 0.05)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Prompt
    TextComponent t_continue_2
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press the SPACEBAR to begin
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
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    TextComponent t_goodbye
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = You have completed the trial. Thank you!
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Flow
  LoopInitiator intro_prompts loopType="TrialHandler"
    conditionsFile = loopEmotionRegulationIntro.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Message': 'Picture Viewing Task\n-Neutral or Unpleasant-'},
      {'Message': 'You will see photograph series of pictures that represent a lot of different events that occur in life.'},
      {'Message': 'Pictures show unpleasant events. We will do a practice trial before the actual trial. You can let the experimenter know if you want to stop anytime during this trial. '}]
    Routine welcome
  LoopTerminator intro_prompts
  LoopInitiator state_measure_pretrial loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = ../../shared/loop-templates/loopStateMeasure.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rating_type': 'Generic', 'rating_category': 'Fatigue', 'rating_min_label': 'No fatigue at all', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current fatigue level'},
      {'rating_type': 'Generic', 'rating_category': 'Sleepiness', 'rating_min_label': 'Not at all sleepy', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current sleepiness level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
      {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
      {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'},
      {'rating_type': 'SAM', 'rating_category': 'Arousal', 'rating_min_label': 'Calm', 'rating_max_label': 'Excited', 'picture_path': '../../shared/pictures/sam-arousal.png', 'rating_message': 'Rate how calm or excited you feel'}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
    Routine stateMeasure
  LoopTerminator state_measure_pretrial
  Routine instruction
  LoopInitiator repeat loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blocka_id': 1},
      {'blocka_id': 2},
      {'blocka_id': 3},
      {'blocka_id': 4}]
    Routine reset
    LoopInitiator view_photos loopType="TrialHandler"
      Selected rows = $row_section
      conditionsFile = emotion_regulation_trials.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trial_number', np.int64(1)), ('block_id', 'block3'), ('technique', 'suppression-reappraisal'), ('photo_filename', '3019.jpg')]),
        OrderedDict([('trial_number', np.int64(2)), ('block_id', 'block3'), ('technique', 'suppression-reappraisal'), ('photo_filename', '3032.jpg')]),
        OrderedDict([('trial_number', np.int64(3)), ('block_id', 'block3'), ('technique', 'suppression-reappraisal'), ('photo_filename', '3022.jpg')]),
        OrderedDict([('trial_number', np.int64(4)), ('block_id', 'block3'), ('technique', 'suppression-reappraisal'), ('photo_filename', '3026.jpg')]),
        OrderedDict([('trial_number', np.int64(5)), ('block_id', 'block3'), ('technique', 'suppression-reappraisal'), ('photo_filename', '3036.jpg')]),
        OrderedDict([('trial_number', np.int64(6)), ('block_id', 'block3'), ('technique', 'suppression-reappraisal'), ('photo_filename', '3021.jpg')]),
        OrderedDict([('trial_number', np.int64(7)), ('block_id', 'block3'), ('technique', 'suppression-reappraisal'), ('photo_filename', '3025.jpg')]),
        OrderedDict([('trial_number', np.int64(8)), ('block_id', 'block3'), ('technique', 'suppression-reappraisal'), ('photo_filename', '3037.jpg')]),
        OrderedDict([('trial_number', np.int64(9)), ('block_id', 'block3'), ('technique', 'suppression-reappraisal'), ('photo_filename', '3016.jpg')]),
        OrderedDict([('trial_number', np.int64(10)), ('block_id', 'block3'), ('technique', 'suppression-reappraisal'), ('photo_filename', '3008.jpg')])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
      Routine fixation
      Routine trial
    LoopTerminator view_photos
    LoopInitiator state_measure_trials loopType="TrialHandler"
      Selected rows = 0:7
      conditionsFile = ../../shared/loop-templates/loopStateMeasure.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'rating_type': 'Generic', 'rating_category': 'Fatigue', 'rating_min_label': 'No fatigue at all', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current fatigue level'},
        {'rating_type': 'Generic', 'rating_category': 'Sleepiness', 'rating_min_label': 'Not at all sleepy', 'rating_max_label': 'As bad as you can imagine', 'picture_path': None, 'rating_message': 'Rate your current sleepiness level'},
        {'rating_type': 'Generic', 'rating_category': 'Pain', 'rating_min_label': 'No pain', 'rating_max_label': 'Worst possible pain', 'picture_path': None, 'rating_message': 'Rate your current pain level'},
        {'rating_type': 'Generic', 'rating_category': 'Pain Unpleasantness', 'rating_min_label': 'Not at all unpleasant pain', 'rating_max_label': 'Worst possible unpleasant pain', 'picture_path': None, 'rating_message': 'Rate your current pain unpleasantness level'},
        {'rating_type': 'SAM', 'rating_category': 'Valence', 'rating_min_label': 'Pleasant', 'rating_max_label': 'Unpleasant', 'picture_path': '../../shared/pictures/sam-valence.png', 'rating_message': 'Rate how pleasant or unpleasant you feel'},
        {'rating_type': 'SAM', 'rating_category': 'Arousal', 'rating_min_label': 'Calm', 'rating_max_label': 'Excited', 'picture_path': '../../shared/pictures/sam-arousal.png', 'rating_message': 'Rate how calm or excited you feel'}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
      Routine stateMeasure
    LoopTerminator state_measure_trials
  LoopTerminator repeat
  Routine goodbye
